PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sonority
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Routines
  Routine instr
    TextComponent instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome and thank you for participating!

        Instructions will go here
    KeyboardComponent instrResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trainquestions1
    SoundComponent stimulitest1
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent correct
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos,0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    ImageComponent incorrect
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos,0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    KeyboardComponent train1TestAnswer
      allowedKeys = 'f','j'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6.0
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  Routine train1
    SoundComponent stimulitrain1
      sound [set every repeat] = $audio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent imagetrain1
      image [set every repeat] = $imageLoc
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine instr2
    TextComponent notice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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      text:
        Next part will automaticall start in 3 minutes.

        Press any button to start
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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  Routine train2
    SoundComponent stimulitrain2
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent imagetrain2
      image [set every repeat] = $imageLoc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine trainquestions2
    SoundComponent stimulitest2
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
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    ImageComponent correct2
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    ImageComponent incorrect2
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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  Routine test1
    SoundComponent test1AudioFirst
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    SoundComponent test1AudioSecond
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    ImageComponent test1Image
      image [set every repeat] = $imageLoc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent test1Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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  Routine testTrainInstr
    TextComponent test1Instr
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
      text = Instructions For Test1 Go Here
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    KeyboardComponent skipTest1Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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    TextComponent oneWarningTest1
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 540
      stopVal [duration (s)] = 60
      text = Less than 1 minute left
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    TextComponent twoWarningTest1
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 480
      stopVal [duration (s)] = 60
      text = Less than 2 minutes left
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  Routine test2
    SoundComponent test2AudioFirst
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent test2AudioSecond
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent test2Image
      image [set every repeat] = $imageLoc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent test2Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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  Routine testNovel2Instr
    TextComponent test3Instr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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      text:
        Instructions For Test3 Go Here
    KeyboardComponent skipTest3Instr
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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  Routine testNovel1Instr
    TextComponent test2Instr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
      text = Instructions For Test2 Go Here
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    KeyboardComponent skipTest2Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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  Routine test3
    SoundComponent test3AudioFirst
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent test3AudioSecond
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    ImageComponent test3Image
      image [set every repeat] = $imageLoc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent test3Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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Flow
  Routine instr
  LoopInitiator train1blocks loopType="TrialHandler"
    conditionsFile = autoConditions\train1LoopCondition.xlsx
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('condFiles', 'autoConditions/train1Block1.xlsx'), ('testFiles', 'autoConditions/train1Block1Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block2.xlsx'), ('testFiles', 'autoConditions/train1Block2Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block3.xlsx'), ('testFiles', 'autoConditions/train1Block3Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block4.xlsx'), ('testFiles', 'autoConditions/train1Block4Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block5.xlsx'), ('testFiles', 'autoConditions/train1Block5Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block6.xlsx'), ('testFiles', 'autoConditions/train1Block6Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block7.xlsx'), ('testFiles', 'autoConditions/train1Block7Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block8.xlsx'), ('testFiles', 'autoConditions/train1Block8Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block9.xlsx'), ('testFiles', 'autoConditions/train1Block9Test.xlsx')])]
    LoopInitiator blockwords1 loopType="TrialHandler"
      conditionsFile = $condFiles
      loopType = sequential
      nReps = 1
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      Routine train1
    LoopTerminator blockwords1
    LoopInitiator blocktest1 loopType="TrialHandler"
      conditionsFile = $testFiles
      loopType = sequential
      nReps = 1
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      Routine trainquestions1
    LoopTerminator blocktest1
  LoopTerminator train1blocks
  Routine instr2
  LoopInitiator train2blocks loopType="TrialHandler"
    conditionsFile = autoConditions\train2LoopCondition.xlsx
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('condFiles', 'autoConditions/train2Block1.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train2Block2.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train2Block3.xlsx')])]
    LoopInitiator blockloop2 loopType="TrialHandler"
      conditionsFile = $condFiles
      loopType = sequential
      nReps = 1
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      Routine train2
    LoopTerminator blockloop2
    LoopInitiator blocktest2 loopType="TrialHandler"
      conditionsFile = $testFiles
      loopType = sequential
      nReps = 1
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      Routine trainquestions2
    LoopTerminator blocktest2
  LoopTerminator train2blocks
  Routine testTrainInstr
  LoopInitiator test1Loop loopType="TrialHandler"
    conditionsFile = autoConditions\test1Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstAudio', '17_kotako3.wav'), ('secondAudio', '17_kotako2.wav'), ('imageLoc', 'pngimages/17_cracker.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '25_tapapi3.wav'), ('secondAudio', '25_tapapi1.wav'), ('imageLoc', 'pngimages/25_apple.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '14_pokoto1.wav'), ('secondAudio', '14_pokoto2.wav'), ('imageLoc', 'pngimages/14_coffee.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '27_pakapa1.wav'), ('secondAudio', '27_pakapa2.wav'), ('imageLoc', 'pngimages/27_kiwi.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '01_kitipi1.wav'), ('secondAudio', '01_kitipi2.wav'), ('imageLoc', 'pngimages/01_gift.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '05_titopo2.wav'), ('secondAudio', '05_titopo3.wav'), ('imageLoc', 'pngimages/05_megaphone.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '12_pokika1.wav'), ('secondAudio', '12_pokika3.wav'), ('imageLoc', 'pngimages/12_pie.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '16_kotapi2.wav'), ('secondAudio', '16_kotapi3.wav'), ('imageLoc', 'pngimages/16_icecream.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '03_kikita3.wav'), ('secondAudio', '03_kikita1.wav'), ('imageLoc', 'pngimages/03_box.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '21_papika3.wav'), ('secondAudio', '21_papika1.wav'), ('imageLoc', 'pngimages/21_cheese.png'), ('whichAudio', 2)])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
    Routine test1
  LoopTerminator test1Loop
  Routine testNovel1Instr
  LoopInitiator test2Loop loopType="TrialHandler"
    conditionsFile = autoConditions\test2Conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('firstAudio', '49_tatopi1.wav'), ('secondAudio', '49_tatopi3.wav'), ('imageLoc', 'pngimages/49_calculator.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '71_kotato1.wav'), ('secondAudio', '71_kotato2.wav'), ('imageLoc', 'pngimages/71_eye.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '80_tatato1.wav'), ('secondAudio', '80_tatato3.wav'), ('imageLoc', 'pngimages/80_dog.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '36_pipapa2.wav'), ('secondAudio', '36_pipapa1.wav'), ('imageLoc', 'pngimages/36_microwave.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '57_tipipa2.wav'), ('secondAudio', '57_tipipa3.wav'), ('imageLoc', 'pngimages/57_flashlight.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '51_tapopa2.wav'), ('secondAudio', '51_tapopa1.wav'), ('imageLoc', 'pngimages/51_pencil.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '76_patoti1.wav'), ('secondAudio', '76_patoti3.wav'), ('imageLoc', 'pngimages/76_rabbit.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '58_kipoki3.wav'), ('secondAudio', '58_kipoki2.wav'), ('imageLoc', 'pngimages/58_nail.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '32_kipoto3.wav'), ('secondAudio', '32_kipoto2.wav'), ('imageLoc', 'pngimages/32_greenpepper.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '81_kakapa3.wav'), ('secondAudio', '81_kakapa1.wav'), ('imageLoc', 'pngimages/81_cat.png'), ('whichAudio', 2)])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
    Routine test2
  LoopTerminator test2Loop
  Routine testNovel2Instr
  LoopInitiator test3Loop loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine test3
  LoopTerminator test3Loop
